OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Generic stream reader => #0
  Filename = C:/Users/35389/Desktop/Friday/motor-imagery-1-[2023.10.28-19.55.46].ov
#0.Output stream 2 -> Channel Selector "Channel 1;Channel 2; Channel 3"
  Channel List = Channel 1;Channel 2; Channel 3
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #2
  Filter Type = Band Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 7
  High Cut-off Frequency (Hz) = 42
#0.Output stream 3 -> Identity
-> Identity => #4
Input stream 1=#2, Input stream 2=#4 -> Identity => #5
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching => #6
  Epoch duration (in sec) = 2.5
  Epoch offset (in sec) = -0.2
  Stimulation to epoch from = OVTK_GDF_Wake
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 7
  High Cut-off Frequency (Hz) = 15
-> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.0625
-> Simple DSP
  Equation = X*X
-> Signal Power Log => #10
#6 -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 15
  High Cut-off Frequency (Hz) = 42
-> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.0625
-> Simple DSP
  Equation = X*X
-> Signal Power Log => #14
Input stream 1=#10, Input stream 2=#14 -> Feature aggregator => #15
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching => #16
  Epoch duration (in sec) = 2.5
  Epoch offset (in sec) = -0.2
  Stimulation to epoch from = OVTK_GDF_Down
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 7
  High Cut-off Frequency (Hz) = 15
-> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.0625
-> Simple DSP
  Equation = X*X
-> Signal Power Log => #20
#16 -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 15
  High Cut-off Frequency (Hz) = 42
-> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.0625
-> Simple DSP
  Equation = X*X
-> Signal Power Log => #24
Input stream 1=#20, Input stream 2=#24 -> Feature aggregator => #25
Stimulations=#5.Output stream 2, Features for class 1=#15, Features for class 2=#25 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = C:/Users/35389/Desktop/Friday/eeg-eyes.cfg
  Multiclass strategy to apply = OneVsOne
  Pairwise Decision Strategy = PKPD
  Class 1 label = OVTK_GDF_Wake
  Class 2 label = OVTK_GDF_Up
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
