OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "Channel 1;Channel 2;Channel 3" => #1
  Channel List = Channel 1;Channel 2;Channel 3
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #2
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 7
  High Cut-off Frequency (Hz) = 42
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 7
  High Cut-off Frequency (Hz) = 15
-> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.0625
-> Simple DSP
  Equation = X*X
-> Signal Power Log => #6
#2 -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 15
  High Cut-off Frequency (Hz) = 42
-> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.0625
-> Simple DSP
  Equation = X*X
-> Signal Power Log => #10
Input stream 1=#6, Input stream 2=#10 -> Feature aggregator => #11
Features=#11 -> Classifier processor => #12
  Filename to load configuration from = C:/Users/35389/Desktop/Friday/left-right.cfg
#12.Labels -> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
#12.Labels -> Stimulation listener
  Log level to use = Information
#12.Labels -> TCP Writer
  Port = 5679
  Output format = Raw
Data=#2 -> Signal display
  Display Mode = Scroll
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = true
#1 -> Temporal Filter => #17
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 7
  High Cut-off Frequency (Hz) = 42
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 7
  High Cut-off Frequency (Hz) = 15
-> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.0625
-> Simple DSP
  Equation = X*X
-> Signal Power Log => #21
#17 -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 15
  High Cut-off Frequency (Hz) = 42
-> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.0625
-> Simple DSP
  Equation = X*X
-> Signal Power Log => #25
Input stream 1=#21, Input stream 2=#25 -> Feature aggregator => #26
Features=#26 -> Classifier processor => #27
  Filename to load configuration from = C:/Users/35389/Desktop/Friday/eeg-eyes.cfg
#27.Labels -> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
#27.Labels -> TCP Writer
  Port = 5678
  Output format = Raw
